[
    {
        "object.className": "ProtImportMovies",
        "object.id": "2",
        "object.label": "scipion - import movies",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "importFrom": 0,
        "filesPath": "/work/gsharov/tmp/project/Movies",
        "filesPattern": "*.mrc",
        "copyFiles": false,
        "haveDataBeenPhaseFlipped": false,
        "acquisitionWizard": null,
        "voltage": 300.0,
        "sphericalAberration": 2.7,
        "amplitudeContrast": 0.1,
        "magnification": 50000,
        "samplingRateMode": 0,
        "samplingRate": 1.0,
        "scannedPixelSize": 7.0,
        "doseInitial": 0.0,
        "dosePerFrame": 1.0,
        "gainFile": "gain.mrc",
        "darkFile": null,
        "dataStreaming": true,
        "timeout": 43200,
        "fileTimeout": 30,
        "blacklistDateFrom": null,
        "blacklistDateTo": null,
        "useRegexps": true,
        "blacklistFile": null,
        "inputIndividualFrames": false,
        "numberOfIndividualFrames": null,
        "stackFrames": false,
        "writeMoviesInProject": false,
        "movieSuffix": "_frames.mrcs",
        "deleteFrames": false
    },
    {
        "object.className": "ProtRelionAssignOpticsGroup",
        "object.id": "64",
        "object.label": "relion - assign optics group",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 1,
        "opticsGroupName": "opticsGroup1",
        "mtfFile": "mtf_falcon3EC_300kV.star",
        "beamTiltX": 0.0,
        "beamTiltY": 0.0,
        "defectFile": null,
        "inputSet": "2.outputMovies"
    },
    {
        "object.className": "ProtMotionCorr",
        "object.id": "99",
        "object.label": "motioncorr - movie alignment",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 1,
        "gpuList": "0",
        "doSaveAveMic": true,
        "useAlignToSum": true,
        "alignFrame0": 1,
        "alignFrameN": 0,
        "binFactor": 1.0,
        "cropOffsetX": 0,
        "cropOffsetY": 0,
        "cropDimX": 0,
        "cropDimY": 0,
        "doSaveMovie": false,
        "doComputePSD": false,
        "doComputeMicThumbnail": false,
        "extraProtocolParams": "",
        "doApplyDoseFilter": true,
        "patchX": 5,
        "patchY": 5,
        "patchOverlap": 0,
        "group": 1,
        "tol": 0.5,
        "doSaveUnweightedMic": false,
        "doMagCor": false,
        "scaleMaj": 1.0,
        "scaleMin": 1.0,
        "angDist": 0.0,
        "gainRot": 0,
        "gainFlip": 0,
        "defectFile": null,
        "defectMap": null,
        "extraParams2": "",
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 1,
        "inputMovies": "64.outputMovies"
    },
    {
        "object.className": "ProtGctf",
        "object.id": "159",
        "object.label": "gctf - ctf estimation",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 1,
        "recalculate": false,
        "sqliteFile": null,
        "ctfDownFactor": 1.0,
        "windowSize": 1024,
        "lowRes": 50.0,
        "highRes": 4.0,
        "minDefocus": 5000.0,
        "maxDefocus": 90000.0,
        "stepDefocus": 500.0,
        "astigmatism": 1000.0,
        "plotResRing": true,
        "gpuList": "1",
        "doEPA": false,
        "EPAsmp": 4,
        "doBasicRotave": false,
        "overlap": 0.5,
        "convsize": 85,
        "bfactor": 150,
        "doHighRes": false,
        "HighResL": 15.0,
        "HighResH": 4.0,
        "HighResBf": 50,
        "doValidate": false,
        "doPhShEst": false,
        "phaseShiftL": 0.0,
        "phaseShiftH": 180.0,
        "phaseShiftS": 10.0,
        "phaseShiftT": 0,
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 1,
        "streamingWarning": null,
        "streamingSleepOnWait": 0,
        "streamingBatchSize": 5,
        "inputMicrographs": "99.outputMicrographsDoseWeighted"
    },
    {
        "object.className": "ProtRelionAutopickLoG",
        "object.id": "223",
        "object.label": "relion - auto-picking LoG",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 1,
        "boxSize": 256,
        "minDiameter": 150,
        "maxDiameter": 180,
        "areParticlesWhite": false,
        "maxResolution": 20.0,
        "threshold": 0.0,
        "threshold2": 999.0,
        "extraParams": "",
        "streamingWarning": null,
        "streamingSleepOnWait": 0,
        "streamingBatchSize": 5,
        "hostName": "localhost",
        "numberOfMpi": 5,
        "inputMicrographs": "99.outputMicrographsDoseWeighted"
    },
    {
        "object.className": "ProtRelionExtractParticles",
        "object.id": "290",
        "object.label": "relion - particles extraction",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "downsampleType": 0,
        "boxSize": 256,
        "doRescale": true,
        "rescaledSize": 64,
        "doInvert": true,
        "doNormalize": true,
        "backDiameter": -1,
        "stddevWhiteDust": -1.0,
        "stddevBlackDust": -1.0,
        "streamingWarning": null,
        "streamingSleepOnWait": 0,
        "streamingBatchSize": 5,
        "hostName": "localhost",
        "numberOfMpi": 5,
        "inputCoordinates": "223.outputCoordinates",
        "inputMicrographs": "99.outputMicrographsDoseWeighted",
        "ctfRelations": "159.outputCTF"
    },
    {
        "object.className": "ProtMonitorSummary",
        "object.id": "336",
        "object.label": "emfacilities - monitor summary",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "inputProtocols": [
            "2",
            "64",
            "99",
            "159",
            "223",
            "290"
        ],
        "samplingInterval": 60,
        "stddevValue": 0.04,
        "ratio1Value": 1.15,
        "ratio2Value": 4.5,
        "maxDefocus": 40000.0,
        "minDefocus": 1000.0,
        "astigmatism": 1000.0,
        "monitorTime": 30000.0,
        "cpuAlert": 101.0,
        "memAlert": 101.0,
        "swapAlert": 101.0,
        "doGpu": false,
        "gpusToUse": "0",
        "doNetwork": false,
        "netInterfaces": 1,
        "doDiskIO": false,
        "doMail": false,
        "emailFrom": "@mail.mrc-lmb.cam.ac.uk",
        "emailTo": "@mail.mrc-lmb.cam.ac.uk",
        "smtp": "mail.mrc-lmb.cam.ac.uk",
        "publishCmd": ""
    }
]