[
    {
        "object.className": "ProtImportMovies",
        "object.id": "2",
        "object.label": "scipion - import movies",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "importFrom": 0,
        "filesPath": "/net/cista1/Krios1Gatan/",
        "filesPattern": "*.tif",
        "copyFiles": false,
        "haveDataBeenPhaseFlipped": false,
        "acquisitionWizard": null,
        "voltage": 300.0,
        "sphericalAberration": 2.7,
        "amplitudeContrast": 0.1,
        "magnification": 50000,
        "samplingRateMode": 0,
        "samplingRate": 1.0,
        "scannedPixelSize": 7.0,
        "doseInitial": 0.0,
        "dosePerFrame": 1.0,
        "gainFile": "ololo.mrc",
        "darkFile": null,
        "dataStreaming": true,
        "timeout": 72000,
        "fileTimeout": 30,
        "blacklistDateFrom": null,
        "blacklistDateTo": null,
        "useRegexps": true,
        "blacklistFile": null,
        "inputIndividualFrames": false,
        "numberOfIndividualFrames": null,
        "stackFrames": false,
        "writeMoviesInProject": false,
        "movieSuffix": "_frames.mrcs",
        "deleteFrames": false,
        "mtf": null,
        "beamtiltX": 0.0,
        "beamtiltY": 0.0,
        "opticsGroup": "opticsGroup1"
    },
    {
        "object.className": "ProtMotionCorr",
        "object.id": "68",
        "object.label": "motioncorr - movie alignment",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "gpuList": "0",
        "doSaveAveMic": true,
        "useAlignToSum": true,
        "alignFrame0": 1,
        "alignFrameN": 0,
        "binFactor": 1.0,
        "cropOffsetX": 0,
        "cropOffsetY": 0,
        "cropDimX": 0,
        "cropDimY": 0,
        "doSaveMovie": false,
        "doComputePSD": false,
        "doComputeMicThumbnail": false,
        "extraProtocolParams": "",
        "doApplyDoseFilter": true,
        "patchX": 5,
        "patchY": 5,
        "patchOverlap": 0,
        "group": 1,
        "tol": 0.5,
        "doSaveUnweightedMic": true,
        "doMagCor": false,
        "useEst": true,
        "scaleMaj": 1.0,
        "scaleMin": 1.0,
        "angDist": 0.0,
        "gainRot": 0,
        "gainFlip": 0,
        "defectFile": null,
        "extraParams2": "",
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 1,
        "inputMovies": "2.outputMovies"
    },
    {
        "object.className": "ProtGctf",
        "object.id": "130",
        "object.label": "gctf - ctf estimation",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "recalculate": false,
        "sqliteFile": null,
        "AutoDownsampling": false,
        "ctfDownFactor": 1.0,
        "lowRes": 0.05,
        "highRes": 0.35,
        "minDefocus": 0.25,
        "maxDefocus": 4.0,
        "windowSize": 512,
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 1,
        "astigmatism": 100.0,
        "plotResRing": true,
        "gpuList": "1",
        "doEPA": false,
        "EPAsmp": 4,
        "doBasicRotave": false,
        "overlap": 0.5,
        "convsize": 85,
        "smoothResL": 1000,
        "bfactor": 150,
        "doHighRes": false,
        "HighResL": 15.0,
        "HighResH": 4.0,
        "HighResBf": 50,
        "doValidate": false,
        "doPhShEst": false,
        "phaseShiftL": 0.0,
        "phaseShiftH": 180.0,
        "phaseShiftS": 10.0,
        "phaseShiftT": 0,
        "coSearchRefine": false,
        "refine2DT": 1,
        "streamingWarning": null,
        "streamingSleepOnWait": 0,
        "streamingBatchSize": 5,
        "inputMicrographs": "68.outputMicrographs"
    },
    {
        "object.className": "ProtMonitorSummary",
        "object.id": "197",
        "object.label": "scipion - monitor summary",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "inputProtocols": [
            "2",
            "68",
            "130"
        ],
        "samplingInterval": 60,
        "stddevValue": 0.04,
        "ratio1Value": 1.15,
        "ratio2Value": 4.5,
        "maxDefocus": 40000.0,
        "minDefocus": 1000.0,
        "astigmatism": 1000.0,
        "monitorTime": 30000.0,
        "cpuAlert": 101.0,
        "memAlert": 101.0,
        "swapAlert": 101.0,
        "doGpu": false,
        "gpusToUse": "0",
        "doNetwork": false,
        "netInterfaces": 1,
        "doDiskIO": false,
        "doMail": false,
        "emailFrom": "@mail.mrc-lmb.cam.ac.uk",
        "emailTo": "@mail.mrc-lmb.cam.ac.uk",
        "smtp": "mail.mrc-lmb.cam.ac.uk",
        "publishCmd": ""
    }
]